PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = experiment
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine test_routine
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    TextboxComponent cover_story
      bold = False
      editable = False
      font = Segoe UI
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 3.5
      text = “Hello XYZ (say the name of the child)! Today, we will play a very interesting game in which there are two puppets! The puppets are the Lady Bird (flashes the character’s picture) and the Monkey (flashes the respective picture). They love playing hide-n-seek games with their toys. The Lady Bird always hides a toy and goes away. After she goes away, the Monkey comes up and tries to look for the toy. In the game, you will help the monkey in finding out where the toy is hidden.” 
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    KeyboardComponent fam_transition
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextboxComponent fam
      bold = False
      durationEstim = 30
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 4
      text = Familiarisation Trail
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Flow
  LoopInitiator test_loop loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine test_routine
  LoopTerminator test_loop
